// Parameter file created by ElastixParameterFile module

// Registration parameters
(Registration "MultiMetricMultiResolutionRegistration")
(FixedImageDimension 3)
(MovingImageDimension 3)
(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(UseDirectionCosines "true")
(NumberOfResolutions 3)
(ErodeFixedMask "false" "false" "false")
(ErodeMovingMask "false" "false" "false")

// Transform parameters
(Transform "AffineTransform")
(HowToCombineTransforms "Compose")
(AutomaticScalesEstimation "true" "true" "true")
(AutomaticTransformInitialization "true")

// Metric parameters
(Metric "NormalizedMutualInformation" "CorrespondingPointsEuclideanDistanceMetric")
(ShowExactMetricValues "false" "false" "false")
(CheckNumberOfSamples "false" "false" "false")
(RequiredRatioOfValidSamples 0.25)
(NumberOfHistogramBins 64)
(NumberOfFixedHistogramBins 64)
(NumberOfMovingHistogramBins 64)
(MovingKernelBSplineOrder 3 3 3)

// ********** Metric
(UseRelativeWeights "true")
(Metric0RelativeWeight 1.0)
(Metric1RelativeWeight 0.05)


// Optimizer parameters
(Optimizer "AdaptiveStochasticGradientDescent")
(NewSamplesEveryIteration "true")
(MaximumNumberOfIterations 1000)
(MaximumNumberOfSamplingAttempts 0)
(AutomaticParameterEstimation "true")
(SigmoidInitialTime 0 0 0)
(UseAdaptiveStepSizes "true")
(NumberOfSamplesForExactGradient 100000)

// Interpolator parameters
(Interpolator "BSplineInterpolator")
(BSplineInterpolationOrder 1 1 1)

// ResampleInterpolator parameters
(ResampleInterpolator "FinalBSplineInterpolator")
(FinalBSplineInterpolationOrder 3)

// ImageSampler parameters
(ImageSampler "RandomCoordinate")
(NumberOfSpatialSamples 10000)
(UseRandomSampleRegion "false")
(FixedImageBSplineInterpolationOrder 1 1 1)

// FixedImagePyramid parameters
(FixedImagePyramid "FixedSmoothingImagePyramid")
(FixedImagePyramidSchedule 4 4 4 2 2 2 1 1 1)

// MovingImagePyramid parameters
(MovingImagePyramid "MovingSmoothingImagePyramid")
(MovingImagePyramidSchedule 4 4 4 2 2 2 1 1 1)

(WritePyramidImagesAfterEachResolution "false")

// Resampler parameters
(Resampler "DefaultResampler")
(WriteResultImage "true")
(CompressResultImage "false")
(ResultImageFormat "nii")
(ResultImagePixelType "short")
(WriteResultImageAfterEachResolution "false")
